20110928_160356 Admin
Administrator
--{ RES }--
V;200
--{ CFG }--
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1,0;Tube 13*100mm 16 Pos;Tube1
2,0;Tube 13*100mm 16 Pos;Tube2
3,0;Tube 13*100mm 16 Pos;Tube3
4,0;Tube 13*100mm 16 Pos;Tube4
5,0;Tube 13*100mm 16 Pos;Tube5
6,0;Tube 13*100mm 16 Pos;Tube6
7,0;Tube 13*100mm 16 Pos;Tube7
8,0;Tube 13*100mm 16 Pos;Tube8
9,0;Tube 13*100mm 16 Pos;Tube9
10,0;Tube 13*100mm 16 Pos;Tube10
11,0;Tube 13*100mm 16 Pos;Tube11
12,0;Tube 13*100mm 16 Pos;Tube12
13,0;Tube 13*100mm 16 Pos;Tube13
14,0;Tube 13*100mm 16 Pos;Tube14
15,0;Tube 13*100mm 16 Pos;Tube15
16,0;Tube 13*100mm 16 Pos;Tube16
17,0;Tube 13*100mm 16 Pos;Tube17
18,0;Tube 13*100mm 16 Pos;Tube18
19,0;Tube 13*100mm 16 Pos;Tube19
20,0;Tube 13*100mm 16 Pos;Tube20
21,0;Tube 13*100mm 16 Pos;Tube21
22,0;Tube 13*100mm 16 Pos;Tube22
23,0;Tube 13*100mm 16 Pos;Tube23
24,0;Tube 13*100mm 16 Pos;Tube24
25,0;Tube 13*100mm 16 Pos;Tube25
26,0;Tube 13*100mm 16 Pos;Tube26
27,0;Tube 13*100mm 16 Pos;Tube27
28,0;Tube 13*100mm 16 Pos;Tube28
29,0;Tube 13*100mm 16 Pos;Tube29
30,0;Tube 13*100mm 16 Pos;Tube30
31,0;Tube 13*100mm 16 Pos;Tube31
32,0;Tube 13*100mm 16 Pos;Tube32
33,0;Tube 13*100mm 16 Pos;Tube33
34,0;Tube 13*100mm 16 Pos;Tube34
35,0;Tube 13*100mm 16 Pos;Tube35
36,0;Tube 13*100mm 16 Pos;Tube36
37,0;Washstation 2Grid Cleaner short
37,1;Washstation 2Grid Waste
37,2;Washstation 2Grid Cleaner long
37,6;Washstation 2Grid DiTi Waste;Diti Wast for Right LIHA
39,0;96Tip Comb;96Tip Comb 
39,1;Microtiter DW 96 Plate;DW 96 Plate 2
39,2;Microtiter DW 96 Plate;DW 96 Plate 1
45,0;Microtiter DW 96 Plate;DW 96 Plate 5
45,1;Microtiter DW 96 Plate;DW 96 Plate 4
45,2;Microtiter DW 96 Plate;DW 96 Plate 3
51,0;Trough 100ml;LH Buffer 1
51,1;Trough 100ml;LH Buffer 2
52,0;Tube Eppendorf 1.5ml 4 Pos;MG Beads Tubes
52,1;Trough 100ml;Wash Buffer
52,2;Trough 100ml;Wash Elution Buffer
53,0;DiTi 1000ul;DiTi 1000ul 1
53,1;DiTi 1000ul;DiTi 1000ul 2
53,2;DiTi 200 ul;DiTi 200ul
1;System
69;King Fisher Flx
15;Shelf 6Pos
63;Heater2
37;Shelf 6Pos 2
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--{ RPG }--
FACTS("PosID3","PosID3_Scan","USER_ERRORPROMPT;False;False;SCANRESULT_FILE;True;OVERWRITE_BC;True;CARRIER_DEF;961;;;DiTi 3Pos ROMA;53;3;LABWARE_DEF;DiTi 1000ul 1;;DiTi 1000ul;0;0;;0;None;LABWARE_DEF;DiTi 1000ul 2;;DiTi 1000ul;1;0;;0;None;LABWARE_DEF;DiTi 200ul;;DiTi 200 ul;2;0;;0;None;BARCODETYPE_DEF;CODABAR;0;Off;Off;BARCODETYPE_DEF;Code128;0;Off;Off;BARCODETYPE_DEF;Code2of5Interleaved;0;Off;Off;BARCODETYPE_DEF;Code2of5Interleaved;0;Off;Off;BARCODETYPE_DEF;Code39FullASCII;0;Off;Off;BARCODETYPE_DEF;Code93Standard;0;Off;Off;","0","");
Variable(NEWDITI1000_SITE,"1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
Variable(NEWDITI200_SITE,"1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
Variable(sacnTimes,"1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
ExportVariable(sacnTimes,"C:\vbscript\fileIndex.txt",0,1);
EXECUTE_VBSCRIPT("C:\vbscript\test.vbs",0);
BeginLoop("2","scan DiTi");
Group("Old DiTi1000 to Shelf");
Vector("DITI Rack Gripper Insert Back","53","1",0,0,2,1,1,0);
Vector("DITI Rack Up and Down","53","1",1,0,2,2,1,0);
Vector("Shelf DITI","15","NEWDITI1000_SITE",0,1,2,0,1,0);
GroupEnd();
Group("New DiTi1000 to DiTi Carrier");
Vector("Shelf DITI","15","NEWDITI1000_SITE+1",0,1,2,1,1,0);
Vector("DITI Rack Up and Down","53","1",0,0,2,0,1,0);
Vector("DITI Rack Gripper Insert Back","53","1",1,0,0,0,1,0);
GroupEnd();
Variable(NEWDITI1000_SITE,"NEWDITI1000_SITE+1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
Set_DITI_Counter2("DiTi 1000ul","53","1","1",0);
Group("Old DiTi10002 to Shelf");
Vector("DITI Rack Gripper Insert Back","53","2",0,0,2,1,1,0);
Vector("DITI Rack Up and Down","53","2",1,0,2,2,1,0);
Vector("Shelf DITI","15","NEWDITI1000_SITE",0,1,2,0,1,0);
GroupEnd();
Group("New DiTi1000 to DiTi2 Carrier");
Vector("Shelf DITI","15","NEWDITI1000_SITE+1",0,1,2,1,1,0);
Vector("DITI Rack Up and Down","53","2",0,0,2,0,1,0);
Vector("DITI Rack Gripper Insert Back","53","2",1,0,0,0,1,0);
GroupEnd();
Variable(NEWDITI1000_SITE,"NEWDITI1000_SITE+1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
Set_DITI_Counter2("DiTi 1000ul","53","2","1",0);
Group("Old DiTi200 to Shelf");
Vector("DITI Rack Gripper Insert Back","53","3",0,0,2,1,1,0);
Vector("DITI Rack Up and Down","53","3",1,0,2,2,1,0);
Vector("Shelf DITI","37","NEWDITI200_SITE",0,1,2,0,1,0);
GroupEnd();
Group("New DiTi to DiTi Carrier");
Vector("Shelf DITI","37","NEWDITI200_SITE+1",0,1,2,1,1,0);
Vector("DITI Rack Up and Down","53","3",0,0,2,0,1,0);
Vector("DITI Rack Gripper Insert Back","53","3",1,0,0,0,1,0);
GroupEnd();
Variable(NEWDITI200_SITE,"NEWDITI200_SITE+1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
Set_DITI_Counter2("DiTi 200 ul","53","3","1",0);
Variable(sacnTimes,"sacnTimes+1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
FACTS("PosID3","PosID3_Scan","USER_ERRORPROMPT;False;False;SCANRESULT_FILE;True;OVERWRITE_BC;True;CARRIER_DEF;961;;;DiTi 3Pos ROMA;53;3;LABWARE_DEF;DiTi 1000ul 1;;DiTi 1000ul;0;0;;0;None;LABWARE_DEF;DiTi 1000ul 2;;DiTi 1000ul;1;0;;0;None;LABWARE_DEF;DiTi 200ul;;DiTi 200 ul;2;0;;0;None;BARCODETYPE_DEF;CODABAR;0;Off;Off;BARCODETYPE_DEF;Code128;0;Off;Off;BARCODETYPE_DEF;Code2of5Interleaved;0;Off;Off;BARCODETYPE_DEF;Code2of5Interleaved;0;Off;Off;BARCODETYPE_DEF;Code39FullASCII;0;Off;Off;BARCODETYPE_DEF;Code93Standard;0;Off;Off;","0","");
ExportVariable(sacnTimes,"C:\vbscript\fileIndex.txt",0,1);
EXECUTE_VBSCRIPT("C:\vbscript\test.vbs",0);
EndLoop();
Group("Old DiTi1000 to Shelf");
Vector("DITI Rack Gripper Insert Back","53","1",0,0,2,1,1,0);
Vector("DITI Rack Up and Down","53","1",1,0,2,2,1,0);
Vector("Shelf DITI","15","NEWDITI1000_SITE",0,1,2,0,1,0);
GroupEnd();
Group("New DiTi1000 to DiTi Carrier");
Vector("Shelf DITI","15","NEWDITI1000_SITE+1",0,1,2,1,1,0);
Vector("DITI Rack Up and Down","53","1",0,0,2,0,1,0);
Vector("DITI Rack Gripper Insert Back","53","1",1,0,0,0,1,0);
GroupEnd();
Variable(NEWDITI1000_SITE,"NEWDITI1000_SITE+1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
Set_DITI_Counter2("DiTi 1000ul","57","1","1",0);
Group("Old DiTi200 to Shelf");
Vector("DITI Rack Gripper Insert Back","53","3",0,0,2,1,1,0);
Vector("DITI Rack Up and Down","53","3",1,0,2,2,1,0);
Vector("Shelf DITI","37","NEWDITI200_SITE",0,1,2,0,1,0);
GroupEnd();
Group("New DiT200i to DiTi Carrier");
Vector("Shelf DITI","37","NEWDITI200_SITE+1",0,1,2,1,1,0);
Vector("DITI Rack Up and Down","53","3",0,0,2,0,1,0);
Vector("DITI Rack Gripper Insert Back","53","3",1,0,0,0,1,0);
GroupEnd();
Variable(NEWDITI200_SITE,"NEWDITI200_SITE+1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
Set_DITI_Counter2("DiTi 200 ul","53","3","1",0);
Variable(sacnTimes,"sacnTimes+1",0,"SAMPLE COLUMN",0,1.000000,6.000000,0,2,0,0);
FACTS("PosID3","PosID3_Scan","USER_ERRORPROMPT;False;False;SCANRESULT_FILE;True;OVERWRITE_BC;True;CARRIER_DEF;961;;;DiTi 3Pos ROMA;53;3;LABWARE_DEF;DiTi 1000ul 1;;DiTi 1000ul;0;0;;0;None;LABWARE_DEF;DiTi 200ul;;DiTi 200 ul;2;0;;0;None;BARCODETYPE_DEF;CODABAR;0;Off;Off;BARCODETYPE_DEF;Code128;0;Off;Off;BARCODETYPE_DEF;Code2of5Interleaved;0;Off;Off;BARCODETYPE_DEF;Code2of5Interleaved;0;Off;Off;BARCODETYPE_DEF;Code39FullASCII;0;Off;Off;BARCODETYPE_DEF;EAN128;0;Off;Off;","0","");
ExportVariable(sacnTimes,"C:\vbscript\fileIndex.txt",0,1);
EXECUTE_VBSCRIPT("C:\vbscript\test.vbs",0);
Group("back");
Group("Old DiTi1000 to shelf 6");
Vector("DITI Rack Gripper Insert Back","53","1",0,0,2,1,1,0);
Vector("DITI Rack Up and Down","53","1",1,0,2,2,1,0);
Vector("Shelf DITI","15","6",0,1,2,0,1,0);
GroupEnd();
Group("shelf 1 to DiTi Carrier 1");
Vector("Shelf DITI","15","1",0,1,2,1,1,0);
Vector("DITI Rack Up and Down","53","1",0,0,2,0,1,0);
Vector("DITI Rack Gripper Insert Back","53","1",1,0,0,0,1,0);
GroupEnd();
Group("Old DiTi10002 to shelf 1");
Vector("DITI Rack Gripper Insert Back","53","2",0,0,2,1,1,0);
Vector("DITI Rack Up and Down","53","2",1,0,2,2,1,0);
Vector("Shelf DITI","15","1",0,1,2,0,1,0);
GroupEnd();
Group("shelf2 to DiTi2 Carrier2");
Vector("Shelf DITI","15","2",0,1,2,1,1,0);
Vector("DITI Rack Up and Down","53","2",0,0,2,0,1,0);
Vector("DITI Rack Gripper Insert Back","53","2",1,0,0,0,1,0);
GroupEnd();
Group("shelf 1 to shlef 2");
Vector("Shelf DITI","15","1",0,1,0,1,1,0);
Vector("Shelf DITI","15","2",0,1,2,0,1,0);
GroupEnd();
Group("Old DiTi200 to Shelf 3");
Vector("DITI Rack Gripper Insert Back","53","3",0,0,2,1,1,0);
Vector("DITI Rack Up and Down","53","3",1,0,2,2,1,0);
Vector("Shelf DITI","37","3",0,1,2,0,1,0);
GroupEnd();
Group("shlef 1 to DiTi Carrier3");
Vector("Shelf DITI","37","1",0,1,2,1,1,0);
Vector("DITI Rack Up and Down","53","3",0,0,2,0,1,0);
Vector("DITI Rack Gripper Insert Back","53","3",1,0,0,0,1,0);
GroupEnd();
GroupEnd();
